PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'Handedness': 'r/l', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  backgroundFit = cover
  color = -1.0000, -1.0000, 0.0902
  expName = RewardEffortLearning
  keyboardBackend = ioHub
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Routines
  Routine reward_rating
    SliderComponent reward
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little_2
      image = image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many_2
      image = image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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    CodeComponent get_rating_2
      Code Type = Auto->JS
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      Begin Experiment:
        reward_ratings = []
      End Routine:
        rewscale_value = reward.getRating()
        reward_ratings.append(rewscale_value)
    PolygonComponent photodiode_r1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine main_trial
    TextComponent text_6
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up!
    CodeComponent CheckKeys
      Code Type = Auto->JS
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      Begin Routine:
        #reset round score to 0
        rscore = 0
        winE = rscore+1
        npumps = 0
        maxPumps = effLevel
        key_sequence = [] # List to store the key sequence ('z' followed by 'p')
        achieved = 0

        if maintask.thisN == 0:
            if max_press_pSec_pract == 0:
                max_press_pSec = 4
            else:
                max_press_pSec = round(max_press_pSec_pract)  # Round to the nearest integer
            npumps_pSec = [0]
      Each Frame:
        # Check for key presses
        keys = event.getKeys()

        if keys:
            key_pressed = keys[0]

            # Check if the key pressed is 'z' and it's the first key in the sequence
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)

            # Check if the key pressed is 'p' and 'z' was pressed before it
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)

            # If the sequence is complete ('z' followed by 'p'), increase the size of the shape
            if key_sequence == ['z', 'p']:
                npumps += 1
                key_sequence = []  # Reset the key sequence
      End Routine:
        # Check if the desired number of pumps has been reached
        if (npumps / max_press_pSec) * 100 >= maxPumps:
            achieved = True
            rscore += 1

        # Add current round score to the total score
        tscore += rscore

        npumps_pSec.append(npumps / t)

        print(max_press_pSec)
        print(npumps_pSec[-1])

        if max_press_pSec < npumps_pSec[-1]:
            max_press_pSec = npumps_pSec[-1]
            print('new max:', max_press_pSec)  # Added a comma to separate the string and variable

        # Save data
        maintask.addData('threshold', effTresh)  # Corrected 'treshold' to 'threshold'
        maintask.addData('npumps_pSec', npumps_pSec)
        maintask.addData('trial_duration', t)
        maintask.addData('# of presses', npumps)
        maintask.addData('trial score', rscore)
        maintask.addData('achieved', achieved)
    CodeComponent barSize
      Code Type = Auto->JS
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      Begin Experiment:
        batterySize=0.00
        batteryMaxSize=0.55
      Begin Routine:
        #balloon image's starting size
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/(max_press_pSec*timeAvailable)
      Each Frame:
        batterySize=npumps*batterySizeIncr
    CodeComponent countdownEasy
      Code Type = Py
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(timeAvailable)
            countdownStarted = True
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    ImageComponent tank
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background
      anchor = bottom-center
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = $[.15, batterySize]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_mt1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine cross
    TextComponent text2_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent photodiode_fix1
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine effort_rating
    SliderComponent effort
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_effortRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How much fuel do you think you will need to get to the next planet?
    TextComponent text_effortRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent effort_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = effort.rating
      store = all keys
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    ImageComponent fuel_empty
      image [set every repeat] = fuelShipWhite.png
      pos = (-0.7, -0.3)
      size = (0.2,0.4)
      startVal [time (s)] = 0.0
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    ImageComponent fuel_full
      image = fuelShipFull-01.png
      pos = (0.7, -0.3)
      size = (0.34,0.5)
      startVal [time (s)] = 0.0
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    CodeComponent get_rating
      Code Type = Auto->JS
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      Begin Experiment:
        effort_ratings = []
      End Routine:
        effscale_value = effort.getRating()
        effort_ratings.append(effscale_value)
    PolygonComponent photodiode_r1_2
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine reward_rating_2
    SliderComponent reward_2
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little
      image = stim/image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many
      image = stim/image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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  Routine Feedback_2
    CodeComponent checkAchieved
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText=FeedbackText1
            crashShow=0
        else:
            feedbackText= FeedbackText2
            crashShow=1
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    ImageComponent image_rubies
      image [set every repeat] = $stimFile
      pos = (0, -0.4)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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    PolygonComponent photodiode_ft1
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine practice_instructions
    CodeComponent selectText
      Code Type = Auto->JS
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      Begin Experiment:
        instructions1=""
        instructions2=""
        instructions3=""
      Begin Routine:
        if instruct_slides.thisN == 0:
            instructions1="On the next screen, you will see a fuel tank marked with a red line. Your goal is to fill it up to the red line, just as demonstrated in the video."
            instructions2=""
            instructions3="Press ENTER to continue."
            #picture=imgExample1.png
        else:
            instructions1="Alternate between pressing 'z' with your left index finger and 'p' with your right index finger as fast as you can to reach the red bar."
            instructions2="You will have 5 seconds to fill the tank."
            instructions3="Press ENTER to Start!"
            #picture=imgExample2.png


        # Assuming "text_component_name" is the name of your Text Component
        practice_intro_text1.text = instructions1
        practice_intro_text2.text = instructions2
        practice_intro_text3.text = instructions3
    TextComponent practice_intro_text1
      letterHeight = 0.1
      pos = (0, 0.55)
      startVal [time (s)] = 0.0
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      text:
        $instructions1
    TextComponent practice_intro_text2
      letterHeight = 0.1
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      text = $instructions2
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    TextComponent practice_intro_text3
      letterHeight = 0.1
      pos = (0, -0.50)
      startVal [time (s)] = 0.0
      text = $instructions3
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    KeyboardComponent practice_start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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    ImageComponent tank_intro
      image = TankOnlyEmpt-01.png
      size = (1,1.5)
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent background_outline_intro
      anchor = bottom-center
      fillColor = $[1.0000, 1.0000, 1.0000]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.35]
      shape = rectangle
      size = [0.12,0.43]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent barBody_Intro
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.35]
      shape = rectangle
      size [set every frame] = [0.12, 0.08]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent treshLine_intro
      fillColor = red
      lineColor = red
      lineWidth = 4
      pos [set every repeat] = [0, 0]
      shape = line
      size = [0.12, .08]
      startVal [condition] = instruct_slides.thisN == 0
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    PolygonComponent red_arrow
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      ori = -90
      pos = [0.15, 0]
      shape = arrow
      size = [0.12, 0.1]
      startVal [condition] = instruct_slides.thisN == 0
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    ImageComponent fingers
      image = /Users/alisaloosen/Desktop/task stuff/fingers.png
      pos = (0, 0.2)
      size = (0.28, 0.5)
      startVal [condition] = instruct_slides.thisN == 1
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  Routine practice
    TextComponent pract_text
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up and try to reach the red bar!
    CodeComponent CheckKeys_2
      Code Type = Auto->JS
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      Begin Experiment:
        max_press_pract = []  # Initialize max_press
        max_press_pSec_pract = -1
        #battery
        batterySize=0.00
        batteryMaxSize=0.55
        #timer
        timer = None
      Begin Routine:
        #reset round score to 0
        rscore = 0
        tscore = 0
        npumps = 0
        maxPumps = practPumps #max presses to complete a trial
        key_sequence = []  # List to store the key sequence ('z' followed by 'p')
        achieved = 0
        firstPump = False


        #battery
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/30
      Each Frame:
        keys = event.getKeys()

        if not keys:
            # No keys pressed, keep the routine running
            continueRoutine = True
        else:
            key_pressed = keys[0]
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)
                if timer is None:
                    timer = core.CountdownTimer(5)
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)

            if key_sequence == ['z', 'p']:
                npumps += 1
                key_sequence = []

        if (-0.5 + batterySize >= effTresh):
             achieved = True
             rscore = rscore + 1
             continueRoutine = False

        # Check if 'z' or 'p' was pressed to start the countdown
        if ('z' in key_sequence or 'p' in key_sequence) and not countdownStarted:
            #countdownClock = core.CountdownTimer(timeAvailable)
            countdownStarted = True

        if timer is not None and timer.getTime() <= 0:
            continueRoutine = False

        #battery
        batterySize=npumps*batterySizeIncr
      End Routine:
        #add current round score to total score
        tscore += rscore

        npumps_pSec = npumps/t
        max_press_pract.append(npumps_pSec)
        max_press_pSec_pract = max(max_press_pract)

        timer = None

        practicetrials.addData('# of presses', npumps)
        practicetrials.addData('trial score', rscore)
        practicetrials.addData('treshold', effTresh)
        practicetrials.addData('max_press_pract', max_press_pract)
        practicetrials.addData('trial_duration', t)
        practicetrials.addData('max_press_pSec_pract',max_press_pSec_pract)
    ImageComponent tank_2
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background_4
      anchor = bottom-center
      fillColor = 0.0902, -1.0000, -1.0000
      lineColor = 0.0902, -1.0000, -1.0000
      lineWidth = 2
      pos = [-0.5, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent background_outline
      anchor = bottom-center
      fillColor = $[1.0000, 1.0000, 1.0000]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody_2
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = [.15, batterySize]
      startVal [time (s)] = 0.0
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    PolygonComponent treshLine
      fillColor = red
      lineColor = red
      lineWidth = 4
      pos [set every repeat] = [0, effTresh]
      shape = line
      size = [0.15, .1]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_pr1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine practice_feedback
    CodeComponent checkAchieved_pract
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText= 'Well done you reached the treshold!'
        elif practicetrials.thisN == 8:
            feedbackText= 'Well done. We will now move on to the main game!'
        else:
            feedbackText= 'Not quite there yet. Add a bit more power!'
    TextComponent feedbackMsg_pract
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    PolygonComponent photodiode_pr2
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine video_instr
    MovieComponent instr_train
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/alisaloosen/Desktop/video_v1.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine instr_quiz
    TextComponent Multiple_Choice1
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent press_enter
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Press ENTER to continue to the next question.
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    MouseComponent mouse
      clickable = [box1, box2, box3]
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = response>0
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    TextboxComponent box1
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, 0.1)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp1
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    TextboxComponent box2
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp2
    TextboxComponent box3
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.5)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp3
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        clickables = [box1, box2, box3]
        correct = None
      Begin Routine:
        # Check if it's the first repetition of the instructionquiz routine
        response = 0  # Set response to 0
        if instructionquiz.thisN == 0:
            quiz_score = 0  # Initialize quiz_score to 0

        # Reset the color of all boxes to white
        for box in clickables:
            box.fillColor = 'white'
      Each Frame:
        # Check if the mouse is pressed in any of the boxes
        if response==0:
            for clickable in clickables:
                if mouse.isPressedIn(clickable):
                # Reset the color of all boxes to white
                    for box in clickables:
                        box.fillColor = 'white'

                        if clickable == box1:
                            response = 1
                        elif clickable == box2:
                            response = 2
                        elif clickable == box3:
                            response = 3
                # Check if the response is correct
                        correct = (response == correctResp)

                        if correct:
                            clickable.fillColor = 'green'
                        else:
                            clickable.fillColor = 'red'
      End Routine:
        if correct: #update score
            quiz_score = quiz_score+1

        instructionquiz.addData('correct', correct)
        instructionquiz.addData('response', response)
        instructionquiz.addData('quiz_score', quiz_score)

        print("Score:", quiz_score)
    KeyboardComponent next_quest
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = response>0
      store = all keys
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  Routine practice_instruction_vid
    TextComponent instrText_2
      letterHeight = 0.1
      pos = [0, .3]
      startVal [time (s)] = 0.0
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      text:
        [Placeholder Intro Video
        ]
    KeyboardComponent trial_select_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine Start
    ButtonComponent start_video
      bold = True
      borderColor = white
      fillColor = -0.4118, -1.0000, 0.0196
      forceEndRoutine = True
      letterHeight = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = START
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    ImageComponent rocket_full
      image = fuelShipFull-01.png
      ori = -45
      pos = (0.4, 0)
      size = [0.4,0.6]
      startVal [time (s)] = 0.0
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    ImageComponent astronaut
      image = stim/astronaut.png
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine check_3
  Routine practice_video
    MovieComponent practice_instruction_video_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stim/PractVideoEffortReward_final.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = True  # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 66
      Each Frame:
        keys = event.getKeys(keyList=["space", "left", "right"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            practice_instruction_video_2.seek(round(practice_instruction_video_2.duration * currentTimeValue))

        if "right" in keys:
            # Move the video forward by a specific time (adjust the value as needed)
            currentTimeValue += 1  # Adjust this value to control fast forward speed
            practice_instruction_video_2.seek(round(practice_instruction_video_2.duration * currentTimeValue))

        if spacePressed:
            practice_instruction_video_2.play()
        else:
            practice_instruction_video_2.pause()
  Routine practice_video_nocontrol
  Routine practice_video_online_2
    MovieComponent practice_instruction_video_online
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stim/PractVideoEffortReward_final.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_practinstr_online
      Code Type = Auto->JS
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      Begin Experiment:
        key_instructions = " "
      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = False # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 66
        key_instructions = "Press 'space' to pause or play, and use the left 'arrow' to rewind."
      Each Frame:
        keys = event.getKeys(keyList=["space", "left"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            practice_instruction_video_online.seek(round(practice_instruction_video_online.duration * currentTimeValue))

        if spacePressed:
            practice_instruction_video_online.play()
            textbox_keyspract.setText('', log=False)
        else:
            practice_instruction_video_online.pause()
            textbox_keyspract.setText("Press 'space' to pause or play, and use the left 'arrow' to rewind.", log=False)
    TextboxComponent textbox_keyspract
      bold = True
      color = 0.3569, 0.6941, 1.0000
      editable = False
      letterHeight = 0.09
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [condition] = spacePressed == False
      text = $key_instructions
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  Routine main_video_online
    MovieComponent main_instruction_video_online
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stim/MainTaskVideoEffortReward_final.mp4
      size = [2,2]
      startVal [time (s)] = 0
      volume = 10
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    CodeComponent code_maininstr_online
      Code Type = Auto->JS
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      Begin Experiment:
        key_instructions = " "
      Begin Routine:
        movieIsPlaying = False
        movieWasPaused = False
        movieWasPlayed = False
        timeLimitPerSeek = 1  # Adjust this as needed
        currentTimeValue = 0  # Initialize the timer value
        spacePressed = False # To toggle play/pause with space

        movieTimeframe = 0
        movieDuration = 123
        key_instructions = "Press 'space' to pause or play, and use the left 'arrow' to rewind."
      Each Frame:
        keys = event.getKeys(keyList=["space", "left","return"])

        if "space" in keys:
            spacePressed = not spacePressed

        if "left" in keys:
            # Move the video backward by a specific time (adjust the value as needed)
            currentTimeValue -= 1  # Adjust this value to control rewind speed
            main_instruction_video_online.seek(round(main_instruction_video_online.duration * currentTimeValue))

        if spacePressed:
            main_instruction_video_online.play()
            textbox_keysmain.setText('', log=False)
        else:
            main_instruction_video_online.pause()
            textbox_keysmain.setText("Press 'space' to pause or play, and use the left 'arrow' to rewind.", log=False)

        if t > main_instruction_video_online.duration and "return" in keys:
            continueRoutine = False
    TextboxComponent textbox_keysmain
      bold = True
      color = 0.3569, 0.6941, 1.0000
      editable = False
      letterHeight = 0.09
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [condition] = spacePressed == False
      text = $key_instructions
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  Routine pre_quiz
    CodeComponent continue_toquiz
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys(keyList=["return"])

        if pre_quiz_instr.thisN == 0:
            announcement_quiz1.text = "We will now ask you a few questions to ensure you understood the instructions. Answer them as accurately as possible, as you will only be allowed to proceed to the main game if you answer all of them correctly."
            announcement_quiz2.text = "Press ENTER to continue!"
        else:
            announcement_quiz1.text = "You have three attempts. After your third attempt, we will send you back to the instruction video so you can watch it again and give it another try."
            announcement_quiz2.text = "Press ENTER to start!"

        if "return" in keys:
            continueRoutine = False  # Set to False when Enter is pressed to end the routine
    TextComponent announcement_quiz1
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0
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    TextComponent announcement_quiz2
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0
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    ImageComponent spaceship
      image = fuelShipFull-01.png
      pos = (-0.5, -0.02)
      size = [0.4, 0.6]
      startVal [time (s)] = 0.0
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    ImageComponent crashed_spaceship
      image = stim/gray_simple_rocket_w_rubble.png
      pos = (0.4, -0.02)
      size = [0.3,0.6]
      startVal [time (s)] = 0.0
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  Routine feedback_quiz
    CodeComponent checkQuiz
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackTextQuiz = ""
        feedbackTimeQuiz = 4

        # Define a dictionary to map conditions to image file paths
        condition_image_mapping = {
            'correct': 'stim/fullShip.png',
            'incorrect': 'stim/gray_simple_rocket_w_rubble.png'
        }

        # Set an initial value for the image variable
        image_path = condition_image_mapping['correct']
      Begin Routine:
        if quiz_score == 3:
            feedbackTextQuiz = "Well done! You answered all questions correctly and will now move on to the main game."
            instructionquiz_rep.finished = True
            videorep.finished = True
            image_path = condition_image_mapping['correct']
        elif quiz_score < 3:
            image_path = condition_image_mapping['incorrect']
            if instructionquiz_rep.thisN >= 2:
                feedbackTextQuiz = "Unfortunately, not all of your answers are correct. Let's watch the instruction video again and then give it another attempt."
            else:
                feedbackTextQuiz = "Unfortunately, not all of your answers are correct. Please give it another attempt."

        # Set the image component's image attribute to the updated image path
        feedback_image.image = image_path
    TextComponent feedbackMsgQuiz_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTimeQuiz
      text [set every repeat] = $feedbackTextQuiz
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    ImageComponent feedback_image
      ori = 10
      pos = (0.5, -0.2)
      size = [0.3,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTimeQuiz
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Flow
  Routine Start
  Routine practice_video_online_2
  LoopInitiator instruct_slides loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine practice_instructions
  LoopTerminator instruct_slides
  LoopInitiator practicetrials loopType="TrialHandler"
    conditionsFile = pract1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practPumps': 25, 'effTresh': -0.36},
      {'practPumps': 50, 'effTresh': -0.22},
      {'practPumps': 75, 'effTresh': -0.09},
      {'practPumps': 100, 'effTresh': 0.05},
      {'practPumps': 25, 'effTresh': -0.36},
      {'practPumps': 50, 'effTresh': -0.22},
      {'practPumps': 75, 'effTresh': -0.09},
      {'practPumps': 100, 'effTresh': 0.05}]
    Routine practice
    Routine practice_feedback
  LoopTerminator practicetrials
  LoopInitiator videorep loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine main_video_online
    LoopInitiator pre_quiz_instr loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine pre_quiz
    LoopTerminator pre_quiz_instr
    LoopInitiator instructionquiz_rep loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      LoopInitiator instructionquiz loopType="TrialHandler"
        conditionsFile = quiz.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'correctResp': 3, 'question': 'How did the instructions mention that the requirements for fuel may change as you venture into new galaxies?', 'resp1': '1. It never changes; everything remains constant.', 'resp2': '2. The instructions do not mention any changes in different galaxies.', 'resp3': '3. Fuel requirements may change, so adaptability is crucial.'},
          {'correctResp': 2, 'question': 'What is the main objective of this game, and what are you required to collect on this cosmic journey?', 'resp1': '1. To explore new galaxies and discover alien lifeforms.', 'resp2': '2. To collect rubies on various planets.', 'resp3': '3. To master fast key pressing techniques for space travel.'},
          {'correctResp': 2, 'question': 'How should you manage your energy allocation when traveling to different planets, and why is this important?', 'resp1': '1. You should allocate maximum energy to all journeys.', 'resp2': '2. You should adapt to different planet requirements.', 'resp3': '3. You should use the same amount of energy for all journeys to maintain consistency.'}]
        Routine instr_quiz
      LoopTerminator instructionquiz
      Routine feedback_quiz
    LoopTerminator instructionquiz_rep
  LoopTerminator videorep
  LoopInitiator maintask loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 50},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 77},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 85},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 79},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 87},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 77},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 66}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
    Routine reward_rating
    Routine cross
    Routine effort_rating
    Routine cross
    Routine main_trial
    Routine cross
    Routine Feedback_2
  LoopTerminator maintask
